<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.3.0">
  <Workflow xmlns:q1="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q2="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:q3="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:FlyCapture">
          <q1:Index>0</q1:Index>
          <q1:ColorProcessing>Default</q1:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:VideoWriter">
          <q2:FileName>D:\cam_left.avi</q2:FileName>
          <q2:Suffix>Timestamp</q2:Suffix>
          <q2:Buffered>true</q2:Buffered>
          <q2:Overwrite>true</q2:Overwrite>
          <q2:FourCC>FMP4</q2:FourCC>
          <q2:FrameRate>150</q2:FrameRate>
          <q2:FrameSize>
            <q2:Width>0</q2:Width>
            <q2:Height>0</q2:Height>
          </q2:FrameSize>
          <q2:ResizeInterpolation>NearestNeighbor</q2:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Metadata.embeddedTimeStamp</Selector>
      </Expression>
      <Expression xsi:type="q3:CsvWriter">
        <q3:FileName>D:\cam_left.csv</q3:FileName>
        <q3:Append>false</q3:Append>
        <q3:Overwrite>true</q3:Overwrite>
        <q3:Suffix>Timestamp</q3:Suffix>
        <q3:IncludeHeader>false</q3:IncludeHeader>
      </Expression>
      <Expression xsi:type="ExternalizedPropertyOfStringVideoWriter">
        <MemberName>FileName</MemberName>
        <Name>CamLeft</Name>
        <Value>D:\cam_left.avi</Value>
      </Expression>
      <Expression xsi:type="ExternalizedPropertyOfStringCsvWriter">
        <MemberName>FileName</MemberName>
        <Name>CamLeftTimestamps</Name>
        <Value>D:\cam_left.csv</Value>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:VideoWriter">
          <q2:FileName>D:\cam_right.avi</q2:FileName>
          <q2:Suffix>Timestamp</q2:Suffix>
          <q2:Buffered>true</q2:Buffered>
          <q2:Overwrite>true</q2:Overwrite>
          <q2:FourCC>FMP4</q2:FourCC>
          <q2:FrameRate>60</q2:FrameRate>
          <q2:FrameSize>
            <q2:Width>0</q2:Width>
            <q2:Height>0</q2:Height>
          </q2:FrameSize>
          <q2:ResizeInterpolation>NearestNeighbor</q2:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="q3:CsvWriter">
        <q3:FileName>D:\cam_right.csv</q3:FileName>
        <q3:Append>false</q3:Append>
        <q3:Overwrite>true</q3:Overwrite>
        <q3:Suffix>Timestamp</q3:Suffix>
        <q3:IncludeHeader>false</q3:IncludeHeader>
      </Expression>
      <Expression xsi:type="ExternalizedPropertyOfStringVideoWriter">
        <MemberName>FileName</MemberName>
        <Name>CamRight</Name>
        <Value>D:\cam_right.avi</Value>
      </Expression>
      <Expression xsi:type="ExternalizedPropertyOfStringCsvWriter">
        <MemberName>FileName</MemberName>
        <Name>CamRightTimestamps</Name>
        <Value>D:\cam_right.csv</Value>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Metadata.embeddedTimeStamp</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:FlyCapture">
          <q1:Index>1</q1:Index>
          <q1:ColorProcessing>Default</q1:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:VideoWriter">
          <q2:FileName>D:\cam_body.avi</q2:FileName>
          <q2:Suffix>Timestamp</q2:Suffix>
          <q2:Buffered>true</q2:Buffered>
          <q2:Overwrite>true</q2:Overwrite>
          <q2:FourCC>FMP4</q2:FourCC>
          <q2:FrameRate>30</q2:FrameRate>
          <q2:FrameSize>
            <q2:Width>0</q2:Width>
            <q2:Height>0</q2:Height>
          </q2:FrameSize>
          <q2:ResizeInterpolation>NearestNeighbor</q2:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="q3:CsvWriter">
        <q3:FileName>D:\cam_body.csv</q3:FileName>
        <q3:Append>false</q3:Append>
        <q3:Overwrite>true</q3:Overwrite>
        <q3:Suffix>Timestamp</q3:Suffix>
        <q3:IncludeHeader>false</q3:IncludeHeader>
      </Expression>
      <Expression xsi:type="ExternalizedPropertyOfStringVideoWriter">
        <MemberName>FileName</MemberName>
        <Name>CamBody</Name>
        <Value>D:\cam_body.avi</Value>
      </Expression>
      <Expression xsi:type="ExternalizedPropertyOfStringCsvWriter">
        <MemberName>FileName</MemberName>
        <Name>CamBodyTimestamps</Name>
        <Value>D:\cam_body.csv</Value>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Metadata.embeddedTimeStamp</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:FlyCapture">
          <q1:Index>2</q1:Index>
          <q1:ColorProcessing>Default</q1:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:Flip">
          <q2:Mode>Both</q2:Mode>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:Flip">
          <q2:Mode>Vertical</q2:Mode>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>0</From>
        <To>1</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>0</From>
        <To>3</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>1</From>
        <To>2</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>3</From>
        <To>4</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>5</From>
        <To>2</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>4</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>9</From>
        <To>7</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>10</From>
        <To>8</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>11</From>
        <To>8</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>12</From>
        <To>21</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>13</From>
        <To>12</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>13</From>
        <To>11</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>16</From>
        <To>14</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>17</From>
        <To>15</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>18</From>
        <To>15</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>19</From>
        <To>22</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>20</From>
        <To>19</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>20</From>
        <To>18</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>21</From>
        <To>7</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>22</From>
        <To>14</To>
        <Label>Source1</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.PointGrey.FlyCapture, Bonsai.PointGrey, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.VideoWriter, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.CsvWriter, Bonsai.System, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ExternalizedProperty`2[[System.String, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089],[Bonsai.Vision.VideoWriter, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null]], Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ExternalizedProperty`2[[System.String, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089],[Bonsai.IO.CsvWriter, Bonsai.System, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null]], Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Flip, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>